########### SESSION 1 ###########

########### initiation ###########

include "CSpeech_Session2_INFO.pcl";		# Include all the variables.
include "CSpeech_Session2_SUBS.pcl";		# Include all the subroutines.
# Loop until the clock is no longer negative.
loop until clock.time() >= 0 begin end; 	

########### welcome ###########

# present a blank screen 
default.present(); 

# Present welcome screen, continue with enter
p_welcome.present();		 
WaitForButtonpress( button_enter );

########### object naming part ###########
task = "objectnaming"; 
default.present(); # present a blank screen 

# Present instruction screen for object naming, continue with enter
p_instr_naming.present();		 
WaitForButtonpress( button_enter );

training();
default.present(); # present a blank screen 

# Enter input file for the session, e.g. "sub_01"
OpenInputFile("What's the subject code (e.g., sub_01)?"); 
     
# Prepare logfile
WriteHeader( outputfilename );	                         
default.present(); # present a blank screen 

# Present instruction screen for object naming again, delete if unwanted
p_instr_naming.present();		 
WaitForButtonpress( button_enter );

# Run trials, save to log file (see subroutine)
runExp();

p_end_part1.present();
WaitForButtonpress( button_enter );

########### semantic judgement part ###########
task = "colournaming"; 

# Present instruction screen for semantic judgement, continue with enter
p_instr_colnaming.present();		 
WaitForButtonpress( button_enter );

training();
default.present(); # present a blank screen 

# Enter input file for the session, e.g. "sub_01"
OpenInputFile("What's the subject code (e.g., sub_01)?"); 
     
# Prepare logfile
WriteHeader( outputfilename );	                         
default.present(); # present a blank screen 

# Present instruction screen for semantic judgement, delete if unwanted
p_instr_colnaming.present();		 
WaitForButtonpress( button_enter );

# Run trials, save to log file (see subroutine)
runExp();

########### the end ###########
     
EndFinalScreen();

